| DifferentiateXY(xWave, yWave)
| Produces derivative of XY pair.
| The name of the output wave is generated by appending "Dif"
| to the name of the source Y wave.
Macro DifferentiateXY(xWave, yWave)
	String xWave, yWave		| names of input X, Y waves
	Prompt xWave, "X wave", popup WaveList("*", ";", "")
	Prompt yWave, "Y wave", popup WaveList("*", ";", "")
	
	String xDifWave, yDifWave		| to hold names of deriv waves
	
	xDifWave = xWave + "Dif"		| generate names for deriv waves
	yDifWave = yWave + "Dif"
	
	Duplicate/O $xWave, $xDifWave		| make clones
	Duplicate/O $yWave, $yDifWave
	
	Differentiate $xDifWave, $yDifWave	| do differentiation
	$yDifWave /= $xDifWave		| take ratio
	KillWaves $xDifWave		| don't need dx/dp anymore
End
